<!--Siemens AG MR print protocol.-->
PrintOut

SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\localizer
TA:0:13  PAT:Off  Voxel size:0.5×0.5×7.0 mm Rel. SNR:1.00   :fl
Properties
  Prio Recon: On
  Before measurement:
  After measurement:
  Load to viewer: On
  Inline movie: Off
  Auto store images: On
  Load to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Wait for user to start: Off
  Start measurements: single
Routine
  Nr. of slice groups: 3
  Slices: 1
  Dist. factor: 20 %
  Position: L2.4 P2.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 250 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 8.6 ms
  TE: 4.00 ms
  Averages: 2
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HEA;HEP
Contrast
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
  Averaging mode: Short term
  Measurements: 1
  Reconstruction: Magnitude
  Multiple series: Each measurement
Resolution
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
  PAT mode: None
  Image Filter: Off
  Distortion Corr.: Off
  TD: 0 ms
  Unfiltered images: Off
  Prescan Normalize: On
  Normalize: Off
  B1 filter: Off
  Raw filter: Off
  Elliptical filter: On
  Mode: Inplane
Geometry
  Nr. of slice groups: 3
  Slices: 1
  Dist. factor: 20 %
  Position: L2.4 P2.0 H0.0 mm
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Multi-slice mode: Sequential
  Series: Interleaved
  Saturation mode: Standard
  Nr. of sat. regions: 0
  Position mode: L-P-H
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
  Special sat.: None
  Set-n-Go Protocol: Off
  Table position: P
  Inline Composing: Off
  Tim CT mode: Off
System
  Body: Off
  HEP: On
  HEA: On
  Position mode: L-P-H
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Save uncombined: Off
  Coil Combine Mode: Adaptive Combine
  AutoAlign: ---
  Auto Coil Select: Off
  Shim mode: Standard
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
  ? Ref. amplitude 1H: 0.000 V
  Position: R0.5 P1.1 H0.0 mm
  Rotation: 0.00 deg
  R >> L: 253 mm
  A >> P: 252 mm
  F >> H: 250 mm
  Frequency 1H: 123.200568 MHz
  Correction factor: 1
  SRFExcit 1H: 62.154 V
  Gain: High
  Table position: 0 mm
  Img. Scale. Cor.: 1.000
Physio
  1st Signal/Mode: None
  Segments: 1
  Tagging: None
  Magn. preparation: None
  Dark blood: Off
  Resp. control: Off
Inline
  Inline Composing: Off
  Distortion correction: Off
Sequence
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Averaging mode: Short term
  Multi-slice mode: Sequential
  Asymmetric echo: Allowed
  Contrasts: 1
  Bandwidth: 320 Hz/Px
  Flow comp.: No
  Allowed delay: 0 s
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
  Mode: Off
BOLD
  Subtract: Off
  Liver registration: Off
  Save images: On
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction indices:
  StdDev: Off
  Std-Dev-Sag: Off
  Std-Dev-Cor: Off
  Std-Dev-Tra: Off
  Std-Dev-Time: Off
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Radial MIP: Off
  Save original images: On
  Distortion Corr.: Off
  MapIt: None
  Contrasts: 1
  Save original images: On
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Number of radial views: 1
  Axis of radial views: L-R
  MPR Sag: Off
  MPR Cor: Off
  MPR Tra: Off

SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\t1_mprage_sag_iso_1mm
TA:5:35  PAT:2  Voxel size:1.0×1.0×1.0 mm Rel. SNR:1.00   :tfl
Properties
  Prio Recon: Off
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  Load to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: Off
  Wait for user to start: On
  Start measurements: single
Routine
  Nr. of slab groups: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: R1.5 A22.4 H35.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 16.7 %
  FoV read: 256 mm
  FoV phase: 100.0 %
  Slice thickness: 1.00 mm
  TR: 2300.0 ms
  TE: 2.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(3D), Prescan Normalize
  Coil elements: HEA;HEP
Contrast
  Magn. preparation: Non-sel. IR
  TI: 857 ms
  Flip angle: 9 deg
  Fat suppr.: None
  Water suppr.: None
  Averaging mode: Long term
  Measurements: 1
  Reconstruction: Magnitude
  Multiple series: Each measurement
Resolution
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Integrated
  Image Filter: Off
  Distortion Corr.: On
  Accel. factor 3D: 1
  Mode: 3D
  Unfiltered images: Off
  Unfiltered images: Off
  Prescan Normalize: On
  Normalize: Off
  B1 filter: Off
  Raw filter: Off
  Elliptical filter: Off
  Slice resolution: 100 %
  Slice partial Fourier: Off
Geometry
  Nr. of slab groups: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: R1.5 A22.4 H35.0 mm
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 16.7 %
  Slices per slab: 192
  Multi-slice mode: Single shot
  Series: Ascending
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System
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  Positioning mode: FIX
  Table position: H
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  Position: R1.5 A22.4 H35.0 mm
  Rotation: 0.00 deg
  F >> H: 256 mm
  A >> P: 256 mm
  R >> L: 192 mm
  Frequency 1H: 123.200568 MHz
  Correction factor: 1
  SLoopIRns1 1H: 587.274 V
  Gain: Low
  Table position: 0 mm
  Img. Scale. Cor.: 10.000
Physio
  1st Signal/Mode: None
  Magn. preparation: Non-sel. IR
  TI: 857 ms
  Dark blood: Off
  Resp. control: Off
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Sequence
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Averaging mode: Long term
  Multi-slice mode: Single shot
  Reordering: Linear
  Asymmetric echo: Allowed
  Bandwidth: 230 Hz/Px
  Flow comp.: No
  Echo spacing: 5.9 ms
  Turbo factor: 224
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
  Mode: Off
BOLD
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  Distortion Corr.: On
  Mode: 3D
  Unfiltered images: Off
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\AX_delta17p3
TA:7:01  PAT:2  Voxel size:2.0×2.0×2.0 mm Rel. SNR:1.00   :r1
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Routine
  Nr. of slice groups: 1
  Slices: 66
  Dist. factor: 0 %
  Position: L2.4 A6.6 H0.0 mm
  Orientation: T > C-5.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 3900 ms
  TE: 86.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HEA;HEP
Contrast
  MTC: Off
  Magn. preparation: None
  Flip angle 1: 90 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Averaging mode: Long term
  Delay in TR: 0 ms
  Reconstruction: Magn./Phase
  Multiple series: Off
Resolution
  Base resolution: 110
  Phase resolution: 100 %
  Phase partial Fourier: Off
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Separate
  Distortion Corr.: Off
  Prescan Normalize: On
  Normalize: Off
  Raw filter: Off
  Elliptical filter: Off
  Dynamic Field Corr.: Off
Geometry
  Nr. of slice groups: 1
  Slices: 66
  Dist. factor: 0 %
  Position: L2.4 A6.6 H0.0 mm
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Multi-slice mode: Interleaved
  Series: Interleaved
  Nr. of sat. regions: 0
  Position mode: L-P-H
  Fat suppr.: Fat sat.
  Special sat.: None
  Fat sat. mode: Strong
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System
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  Auto Coil Select: Default
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  Position: L2.4 A6.6 H0.0 mm
  Rotation: 0.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 132 mm
  Frequency 1H: 123.200568 MHz
  Correction factor: 1
  ACS SincRFPulse 1H: 42.456 V
  Gain: High
  Table position: 0 mm
  Img. Scale. Cor.: 1.000
Physio
  Magn. preparation: None
  Resp. control: Off
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2272 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.53 ms
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: TwoShell30_60
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 1
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 7 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 18 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
BOLD
  Delay in TR: 0 ms
  Diffusion mode: Free
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  Diff. weighted images: On
  Trace weighted images: Off
  ADC maps: Off
  FA maps: Off
  Mosaic: On
  Tensor: Off
  Distortion Corr.: Off
  b-Value >=: 0 s/mm²
  Exponential ADC Maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  Calculated bValue: 1400 s/mm²

SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\AX_delta30
TA:7:01  PAT:2  Voxel size:2.0×2.0×2.0 mm Rel. SNR:1.00   :r1
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2272 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.53 ms
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: TwoShell30_60
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 1
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 7 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 30 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\AX_delta42
TA:7:01  PAT:2  Voxel size:2.0×2.0×2.0 mm Rel. SNR:1.00   :r1
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2272 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.53 ms
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: TwoShell30_60
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 1
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 7 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 42 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\AX_delta55
TA:7:01  PAT:2  Voxel size:2.0×2.0×2.0 mm Rel. SNR:1.00   :r1
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2272 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.53 ms
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: TwoShell30_60
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 1
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 7 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 55 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\AX_b0_ref_PA
TA:1:10  PAT:2  Voxel size:2.0×2.0×2.0 mm Rel. SNR:1.00   :r1
Properties
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  Wait for user to start: Off
  Start measurements: single
Routine
  Nr. of slice groups: 1
  Slices: 66
  Dist. factor: 0 %
  Position: L2.4 A6.6 H0.0 mm
  Orientation: T > C-5.0
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 2.0 mm
  TR: 3900 ms
  TE: 86.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HEA;HEP
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Geometry
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  Phase enc. dir.: R >> L
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System
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  Rotation: 90.00 deg
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2272 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.53 ms
  EPI factor: 110
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: TwoShell30_60
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 1
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 7 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 18 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
BOLD
  Delay in TR: 0 ms
  Diffusion mode: Free
  Diff. weightings: 1
  b-value: 0 s/mm²
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\Low_b_acq
TA:2:38  PAT:2  Voxel size:3.0×3.0×3.0 mm Rel. SNR:1.00   :r1
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Routine
  Nr. of slice groups: 1
  Slices: 42
  Dist. factor: 0 %
  Position: L2.4 A6.6 H0.0 mm
  Orientation: T > C-24.0
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 3400 ms
  TE: 62.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HEA;HEP
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Resolution
  Base resolution: 74
  Phase resolution: 100 %
  Phase partial Fourier: Off
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Separate
  Distortion Corr.: Off
  Prescan Normalize: On
  Normalize: Off
  Raw filter: Off
  Elliptical filter: Off
  Dynamic Field Corr.: Off
Geometry
  Nr. of slice groups: 1
  Slices: 42
  Dist. factor: 0 %
  Position: L2.4 A6.6 H0.0 mm
  Phase enc. dir.: A >> P
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System
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  Shim mode: Advanced
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  ! Position: L2.4 A6.6 H0.0 mm
  ! Rotation: 0.00 deg
  ! R >> L: 220 mm
  ! A >> P: 220 mm
  ! F >> H: 126 mm
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2180 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0.54 ms
  EPI factor: 74
  RF pulse type: Normal
  Gradient mode: Fast
  Directions: Jones31
  Min. Preparation: 1 TRs
  Initial Low-B Reps: 3
  RF Clipping: 0
  Use POCS: Off
  Dynamic B0 Correction: Off
  Coil Combine: Uniform Noise
  Grad Min Rise: 12 ms.m/T
  Max Diff Grad: 295 mT/m
  Small delta: 13 ms
  SMS Factor: 2
  PE Shift Factor: 4
  Big Delta: 30 ms
  Segmented ACS: On
  TX/RX delta frequency: 0 Hz
  TX Nucleus: None
  TX delta frequency: 0 Hz
  Coil elements: HEA;HEP
  Acquisition duration: 0 ms
BOLD
  Delay in TR: 0 ms
  Diffusion mode: Free
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  Diff. weighted images: On
  Trace weighted images: On
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\High_b_acq
TA:0:00  PAT:2  Voxel size:3.0×3.0×3.0 mm Rel. SNR:1.00   :
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Resolution
  Base resolution: 74
  Phase resolution: 100 %
  Phase partial Fourier: Off
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 28
  Reference scan mode: Separate
  Distortion Corr.: Off
  Prescan Normalize: On
  Normalize: Off
  Raw filter: Off
  Elliptical filter: Off
  Dynamic Field Corr.: Off
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System
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  Gain: Low
  Table position: 0 mm
  Img. Scale. Cor.: 1.000
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Sequence
  Introduction: Off
  Averaging mode: Long term
  Multi-slice mode: Interleaved
  Bandwidth: 2180 Hz/Px
  Optimization: None
  Free echo spacing: Off
  Echo spacing: 0 ms
  EPI factor: 74
  RF pulse type: Normal
  Gradient mode: Fast
BOLD
  Delay in TR: 0 ms
  Diffusion mode: Free
  Diff. weightings: 13
  b-value 1: 0 s/mm²
  Diff. weighted images: On
  Trace weighted images: Off
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
SIEMENS MAGNETOM ConnectomA syngo MR D11
\\USER\saper7dev\axcal\291118\diff_acq_ref_PA
TA:1:13  PAT:2  Voxel size:3.0×3.0×3.0 mm Rel. SNR:1.00   :r1
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Resolution
  Base resolution: 74
  Phase resolution: 100 %
  Phase partial Fourier: Off
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 36
  Reference scan mode: Separate
  Distortion Corr.: Off
  Prescan Normalize: On
  Normalize: Off
  Raw filter: Off
  Elliptical filter: Off
  Dynamic Field Corr.: Off
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System
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  Shim mode: Standard
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  Position: L2.4 A6.6 H0.0 mm
  Rotation: 0.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 126 mm
  Frequency 1H: 123.200568 MHz
  Correction factor: 1
  Gain: High
  Table position: 0 mm
  Img. Scale. Cor.: 1.000
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BOLD
  Delay in TR: 0 ms
  Diffusion mode: MDDW
  Diff. weightings: 2
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SIEMENS MAGNETOM ConnectomA syngo MR D11
Table of contents
\\USER
  saper7dev
    axcal
      291118
        localizer
        t1_mprage_sag_iso_1mm
        AX_delta17p3
        AX_delta30
        AX_delta42
        AX_delta55
        AX_b0_ref_PA
        Low_b_acq
        High_b_acq
        diff_acq_ref_PA
